# 1 "/opt/topspin3.5pl6/exp/stan/nmr/lists/pp/user/stimechosin4pulse.jb"
;stimechocos.jb
;
;
; Joachim Beerwerth / 04.08.2017
;
;
; Stim Echo Cos
;
;
;pl1 : RF power level for 90/180 degree pulse
;p1 : length for 90 degree pulse
;d1 : recycle delay
;d4 : additional echo time
;d6 : evolution time
;d8 : trigger time
;vd  :  list of mixing times
;d20 : presaturation delay (T2<d20<T1)
;l20 : presaturation loop number [5]
;ns : 128*n
;zgoptns : -Dsat if saturation or blank
;
;
;$CLASS=Solids
;$DIM=2D
;$TYPE=direct excitation
;$SUBTYPE=simple 2D
;$COMMENT=Stimecho  for rotational diffusion

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

"acqt0=d8"
"d7=d4-de-d8"
"p2=2.0*p1"
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; dimension 2D; AQ_mode  (F1) QF
define delay MCWRK
define delay MCREST
"MCREST = 1m - 1m"
"MCWRK = 0.500000*1m"

    dccorr
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1 ze
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LBLAV, MCWRK
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2 MCWRK 
LBLF1, MCWRK
  MCREST
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  d1
  (p1 pl1 ph1):f1
  d6
  (p1 pl1 ph2):f1
  vd
  (p1 pl1 ph3):f1
  d6
  d4
  (p2 pl1 ph4):f1
  d7
  go=2 ph31
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  MCWRK  wr #0 if #0 zd ivd 
  lo to LBLF1 times td1
  MCWRK rf #0
  lo to LBLAV times tdav
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exit


ph1 =0 0 0 0 1 1 1 1 0 0 0 0 1 1 1 1
     0 0 0 0 1 1 1 1 0 0 0 0 1 1 1 1
     1 1 1 1 2 2 2 2 1 1 1 1 2 2 2 2
     1 1 1 1 2 2 2 2 1 1 1 1 2 2 2 2
     2 2 2 2 3 3 3 3 2 2 2 2 3 3 3 3
     2 2 2 2 3 3 3 3 2 2 2 2 3 3 3 3
     3 3 3 3 0 0 0 0 3 3 3 3 0 0 0 0
     3 3 3 3 0 0 0 0 3 3 3 3 0 0 0 0
ph2 =1 1 1 1 0 0 0 0 3 3 3 3 2 2 2 2
     1 1 1 1 0 0 0 0 3 3 3 3 2 2 2 2
     2 2 2 2 1 1 1 1 0 0 0 0 3 3 3 3
     2 2 2 2 1 1 1 1 0 0 0 0 3 3 3 3
     3 3 3 3 2 2 2 2 1 1 1 1 0 0 0 0
     3 3 3 3 2 2 2 2 1 1 1 1 0 0 0 0
     0 0 0 0 3 3 3 3 2 2 2 2 1 1 1 1
     0 0 0 0 3 3 3 3 2 2 2 2 1 1 1 1
ph3 =1 3 1 3 1 3 1 3 1 3 1 3 1 3 1 3
     1 3 1 3 1 3 1 3 1 3 1 3 1 3 1 3
     2 0 2 0 2 0 2 0 2 0 2 0 2 0 2 0
     2 0 2 0 2 0 2 0 2 0 2 0 2 0 2 0
     3 1 3 1 3 1 3 1 3 1 3 1 3 1 3 1
     3 1 3 1 3 1 3 1 3 1 3 1 3 1 3 1
     0 2 0 2 0 2 0 2 0 2 0 2 0 2 0 2
     0 2 0 2 0 2 0 2 0 2 0 2 0 2 0 2
ph4 =1 1 3 3 1 1 3 3 1 1 3 3 1 1 3 3
     0 0 2 2 0 0 2 2 0 0 2 2 0 0 2 2
     2 2 0 0 2 2 0 0 2 2 0 0 2 2 0 0
     1 1 3 3 1 1 3 3 1 1 3 3 1 1 3 3
     3 3 1 1 3 3 1 1 3 3 1 1 3 3 1 1
     2 2 0 0 2 2 0 0 2 2 0 0 2 2 0 0
     0 0 2 2 0 0 2 2 0 0 2 2 0 0 2 2
     3 3 1 1 3 3 1 1 3 3 1 1 3 3 1 1
ph31=0 2 0 2 2 0 2 0 2 0 2 0 0 2 0 2
     2 0 2 0 0 2 0 2 0 2 0 2 2 0 2 0
     1 3 1 3 3 1 3 1 3 1 3 1 1 3 1 3
     3 1 3 1 1 3 1 3 1 3 1 3 3 1 3 1
     2 0 2 0 0 2 0 2 0 2 0 2 2 0 2 0
     0 2 0 2 2 0 2 0 2 0 2 0 0 2 0 2
     3 1 3 1 1 3 1 3 1 3 1 3 3 1 3 1
     1 3 1 3 3 1 3 1 3 1 3 1 1 3 1 3
