# 1 "/opt/topspin3.5pl6/exp/stan/nmr/lists/pp/user/hahnecho.jb"
;hahnecho.rs
;
;
; Joachim Beerwerth / 14.07.2017
;
;
; Hahn-Echo experiment
; to be used in MAS experiments, echo delay is set to be an integer number
; of rotor periods
; acquisition starts immediately after 180 degree pulse to be able to sample whole echo
; for short echo delays set parameter nsp equal to number of points before echo-top
; in this case use digmod analog or digmod digital and dspfirm smooth
; for full echo accumulation digmod digital and dspfirm sharp can also be used
; set phc0=0 and phc1=d6*swh*360 and do straight fp, sine bell or squared sine bell
; window functions may be used
; for static experiments enter cnst31 = 1e6 and set l1 to desired echo delay in us
;
;
;parameters:
;pl1 : RF power level for 90/180 degree pulse
;p1 : length for 90 degree pulse
;p2 : =p1*2, time of 180 degree pulse
;d1 : recycle delay
;d6 : 1st echo delay (calculated for MAS)
;d7 : 2nd echo delay (always calculated)
;d8 : trigger time
;cnst31 : MAS spin rate  (for MAS)
;l31 : # of rotor cycles for delay
;d20 : presaturation delay (T2<d20<T1)
;l20 : presaturation loop number [5]
;ns : 16*n
;zgoptns : -Drot if spinning, -Ddec (if decoupling desired), -Dsat if saturation, -Dt1 if T1 measurement, -Dt2 for T2 measurement, -Dcp for crosspolarization or blank
;td1     : number of elements in vd list
;
;$CLASS=Solids
;$DIM=2D
;$TYPE=direct excitation
;$SUBTYPE=simple 1D/2D
;$COMMENT=Hahn-Echo experiment, MAS or static, standard parameters for T1 measurement

"p2=2.0*p1"

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"d7=d6-de-d8"


"acqt0=d8"
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;vd  :  list of waiting times for T1


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; dimension 2D; AQ_mode  (F1) QF
define delay MCWRK
define delay MCREST
"MCREST = 1m - 1m"
"MCWRK = 0.500000*1m"

    dccorr
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1 ze
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LBLAV, MCWRK
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2 MCWRK  do:f2
LBLF1, MCWRK 
  MCREST
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  d1
	(p2 pl1 ph20):f1


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  vd


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  (p1 pl1 ph1):f1


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  d6


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  (p2 pl1 ph2):f1
  d7
  go=2 ph31


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  MCWRK  wr #0 if #0 zd ivd 
  lo to LBLF1 times td1
  MCWRK rf #0
  lo to LBLAV times tdav
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exit

ph0=0
ph1=0 1 2 3
ph2=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph10=0
ph11=0
ph20=0
ph30=0
ph31=0 3 2 1 2 1 0 3

;$id: $
